PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = white
  expName = test
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Routines
  Routine intro
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        list_10=[1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20]
        myself_img=''

        shuffle(list_10)
      Begin Routine:
        if list_10[0] == 1:
            myself_img = myself_1

        if list_10[0] == 2:
            myself_img = myself_2

        if list_10[0] == 3:
            myself_img = myself_3

        if list_10[0] == 4:
            myself_img = myself_4

        if list_10[0] == 5:
            myself_img = myself_5

        if list_10[0] == 6:
            myself_img = myself_6

        if list_10[0] == 7:
            myself_img = myself_7

        if list_10[0] == 8:
            myself_img = myself_8

        if list_10[8] == 9:
            myself_img = myself_9

        if list_10[0] == 10:
            myself_img = myself_10

        if list_10[0] == 11:
            myself_img = myself_11

        if list_10[0] == 12:
            myself_img = myself_12

        if list_10[0] == 13:
            myself_img = myself_13

        if list_10[0] == 14:
            myself_img = myself_14

        if list_10[0] == 15:
            myself_img = myself_15

        if list_10[0] == 16:
            myself_img = myself_16

        if list_10[0] == 17:
            myself_img = myself_17

        if list_10[0] == 18:
            myself_img = myself_18

        if list_10[0] == 19:
            myself_img = myself_19

        if list_10[0] == 20:
            myself_img = myself_20
    ImageComponent image_myself
      image [set every repeat] = $myself_img
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_nextbutton
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = image_nextbutton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_40
      image = img/img_instruction/intro_img.png
      pos = (0, -0.1)
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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  Routine phase2
    ImageComponent image
      image = img\bg2.png
      size = (1.65, 0.85)
      startVal [time (s)] = 0.0
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    ImageComponent image_p
      image [set every repeat] = $pic_person
      pos = (-0.7, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent name_py
      color = black
      font = STSong
      letterHeight = 0.04
      pos = (-0.7, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pic_name
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    ButtonComponent button
      bold = True
      color = black
      forceEndRoutine = False
      letterHeight = 0.035
      pos = [-0.70,-0.35]
      size = [0.18,0.08]
      startVal [time (s)] = 0
      text = next
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      callback:
        if textbox.text in list_allowinput and textbox.text not in list_input_num:
            continueRoutine = False
        else:
            continueRoutine = True
            loc_re_x = -0.55
            loc_re_y = -0.15
    TextComponent question
      color = black
      font = STSong
      letterHeight = 0.025
      pos = (-0.65, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = 请输入编号：
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    TextboxComponent textbox
      bold = False
      color = black
      editable = True
      font = STSong
      letterHeight = 0.025
      pos = (-0.6, -0.21)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent grey
      image = img\grey1.png
      pos [set every repeat] = (loc_x[0],loc_y[0])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        list_allowinput = ['1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20','21','22','23','24','25','26','27','28','29','30','31','32','33','34','35','36']
        loc_x = [9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9]
        loc_y = [9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9]
        cnt_ind = 0
        list_input_num = []
      Begin Routine:
        loc_re_x  = 9
        loc_re_y =9
      End Routine:
        if textbox.text == '1':
            loc_x[cnt_ind] = -0.505
            loc_y[cnt_ind] = 0.29
        if textbox.text == '2':
            loc_x[cnt_ind] = -0.39
            loc_y[cnt_ind] = 0.29
        if textbox.text == '3':
            loc_x[cnt_ind] = -0.275
            loc_y[cnt_ind] = 0.29
        if textbox.text == '4':
            loc_x[cnt_ind] = -0.16
            loc_y[cnt_ind] = 0.29
        if textbox.text == '5':
            loc_x[cnt_ind] = -0.045
            loc_y[cnt_ind] = 0.29
        if textbox.text == '6':
            loc_x[cnt_ind] = 0.07
            loc_y[cnt_ind] = 0.29
        if textbox.text == '7':
            loc_x[cnt_ind] = 0.185
            loc_y[cnt_ind] = 0.29
        if textbox.text == '8':
            loc_x[cnt_ind] = 0.3
            loc_y[cnt_ind] = 0.29
        if textbox.text == '9':
            loc_x[cnt_ind] = 0.415
            loc_y[cnt_ind] = 0.29
        if textbox.text == '10':
            loc_x[cnt_ind] = 0.53
            loc_y[cnt_ind] = 0.29
        if textbox.text == '11':
            loc_x[cnt_ind] = 0.645
            loc_y[cnt_ind] = 0.29
        if textbox.text == '12':
            loc_x[cnt_ind] = 0.76
            loc_y[cnt_ind] = 0.29

        if textbox.text == '13':
            loc_x[cnt_ind] = -0.505
            loc_y[cnt_ind] = 0.02
        if textbox.text == '14':
            loc_x[cnt_ind] = -0.39
            loc_y[cnt_ind] = 0.02
        if textbox.text == '15':
            loc_x[cnt_ind] = -0.275
            loc_y[cnt_ind] = 0.02
        if textbox.text == '16':
            loc_x[cnt_ind] = -0.16
            loc_y[cnt_ind] = 0.02
        if textbox.text == '17':
            loc_x[cnt_ind] = -0.045
            loc_y[cnt_ind] = 0.02
        if textbox.text == '18':
            loc_x[cnt_ind] = 0.07
            loc_y[cnt_ind] = 0.02
        if textbox.text == '19':
            loc_x[cnt_ind] = 0.185
            loc_y[cnt_ind] = 0.02
        if textbox.text == '20':
            loc_x[cnt_ind] = 0.3
            loc_y[cnt_ind] = 0.02
        if textbox.text == '21':
            loc_x[cnt_ind] = 0.415
            loc_y[cnt_ind] = 0.02
        if textbox.text == '22':
            loc_x[cnt_ind] = 0.53
            loc_y[cnt_ind] = 0.02
        if textbox.text == '23':
            loc_x[cnt_ind] = 0.645
            loc_y[cnt_ind] = 0.02
        if textbox.text == '24':
            loc_x[cnt_ind] = 0.76
            loc_y[cnt_ind] = 0.02


        if textbox.text == '25':
            loc_x[cnt_ind] = -0.505
            loc_y[cnt_ind] = -0.27
        if textbox.text == '26':
            loc_x[cnt_ind] = -0.39
            loc_y[cnt_ind] = -0.27
        if textbox.text == '27':
            loc_x[cnt_ind] = -0.275
            loc_y[cnt_ind] = -0.27
        if textbox.text == '28':
            loc_x[cnt_ind] = -0.16
            loc_y[cnt_ind] = -0.27
        if textbox.text == '29':
            loc_x[cnt_ind] = -0.045
            loc_y[cnt_ind] = -0.27
        if textbox.text == '30':
            loc_x[cnt_ind] = 0.07
            loc_y[cnt_ind] = -0.27
        if textbox.text == '31':
            loc_x[cnt_ind] = 0.185
            loc_y[cnt_ind] = -0.27
        if textbox.text == '32':
            loc_x[cnt_ind] = 0.3
            loc_y[cnt_ind] = -0.27
        if textbox.text == '33':
            loc_x[cnt_ind] = 0.415
            loc_y[cnt_ind] = -0.27
        if textbox.text == '34':
            loc_x[cnt_ind] = 0.53
            loc_y[cnt_ind] = -0.27
        if textbox.text == '35':
            loc_x[cnt_ind] = 0.645
            loc_y[cnt_ind] = -0.27
        if textbox.text == '36':
            loc_x[cnt_ind] = 0.76
            loc_y[cnt_ind] = -0.27


        cnt_ind+=1

        list_input_num.append(textbox.text)
    TextComponent rewrite
      color = black
      font = STSong
      letterHeight = 0.025
      pos [set every frame] = (loc_re_x,loc_re_y)
      startVal [time (s)] = 0.0
      text = 请重新输入
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    ImageComponent grey_1
      image = img\grey1.png
      pos [set every repeat] = (loc_x[1],loc_y[1])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_2
      image = img\grey1.png
      pos [set every repeat] = (loc_x[2],loc_y[2])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_3
      image = img\grey1.png
      pos [set every repeat] = (loc_x[3],loc_y[3])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_4
      image = img\grey1.png
      pos [set every repeat] = (loc_x[4],loc_y[4])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_5
      image = img\grey1.png
      pos [set every repeat] = (loc_x[5],loc_y[5])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_6
      image = img\grey1.png
      pos [set every repeat] = (loc_x[6],loc_y[6])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_7
      image = img\grey1.png
      pos [set every repeat] = (loc_x[7],loc_y[7])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_8
      image = img\grey1.png
      pos [set every repeat] = (loc_x[8],loc_y[8])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_9
      image = img\grey1.png
      pos [set every repeat] = (loc_x[9],loc_y[9])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_10
      image = img\grey1.png
      pos [set every repeat] = (loc_x[10],loc_y[10])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_11
      image = img\grey1.png
      pos [set every repeat] = (loc_x[11],loc_y[11])
      size = (0.115, 0.31)
      startVal [time (s)] = 0.0
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    ImageComponent grey_12
      image = img\grey1.png
      pos [set every repeat] = (loc_x[12],loc_y[12])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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
  Routine phase3
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        count_num=0
      Begin Routine:
        count_num += 1
        list_1 = [1,2]
        shuffle(list_1)
        if list_1[0] ==2 :
           img_2_loc = pic_left
           img_1_loc = pic_right
        else:
           img_2_loc = pic_right
           img_1_loc = pic_left
      End Routine:
        if count_num >=1 :
            trials_ph3_1.finished = True
    ImageComponent image_ph3Q
      image = img/img_instruction/ph3.png
      pos = (0, 0.27)
      size = (0.9, 0.54)
      startVal [time (s)] = 0.0
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    ImageComponent image_1axis
      image [set every repeat] = $img_1_loc
      pos = (-0.2, 0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_2axis
      image [set every repeat] = $img_2_loc
      pos = (0.2, 0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_leftbutton
      image = img/img_button/1button.jpg
      pos = (-0.2, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_rightbutton
      image = img/img_button/2button.jpg
      pos = (0.2, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_leftbutton,image_rightbutton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_ph3axisnow2
      image = img/img_button/5axis_now.jpg
      pos = (0.2, -0.31)
      size = (0.1, 0.06)
      startVal [time (s)] = 0.0
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    ImageComponent image_ph3axisnow1
      image = img/img_button/5axis_now.jpg
      pos = (-0.2, -0.31)
      size = (0.1, 0.06)
      startVal [time (s)] = 0.0
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  Routine phase4
    TextComponent text_countdown
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $countdownsec
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  Routine personal_info
  Routine stop
    TextComponent text_stop
      color = black
      font = STSong
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 请休息5分钟，再继续下一部分的实验
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  Routine phase1_intro
    TextComponent intro2
      color = black
      font = STSong
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        一共有36个实验参与者，现在与您一起同步进行该实验。



        本研究中会通过呈现恐怖图片，来对实验参与者进行威胁刺激。

        现在一共有36种威胁刺激的组合，您需要决定在哪一时间点
        （1-9，每一个时间点代表1min）
        以及多大概率（60%、70%、80%、90%）
        给到其他被试威胁刺激，与此同时其他被试也会决定
        在哪一时间点以及多大概率对你进行威胁刺激，然后
        你需要根据其他被试对你进行的威胁刺激，来评估你
        与他们合作的意向。





        首先会为您呈现2张恐怖图片的示例，请您首先对
        每张图片进行评分。评分没有对错之分，
        每一张图片请不要花费太多时间，最好以您的
        第一感觉作为答案。



        如果您准备好开始实验了，请点击“Next”。
    ButtonComponent button_2
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5,-0.4)
      size = (0.2,0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine phase1intro
    ImageComponent image_textphase2intro
      image = phase2_intro.png
      startVal [time (s)] = 0.0
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    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.5)
      size = (0.2,0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine fixation
    TextComponent text_fixation
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine phase1
    ImageComponent image_horrible
      image [set every repeat] = $horriblepic
      size = (0.6, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_evl1
      image = img/img_horriblethreat/hopic_evl0.png
      pos = (0, 0.1)
      size = (1.2,0.2)
      startVal [time (s)] = 5
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    ImageComponent image_3button
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 5
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    MouseComponent mouse_2
      clickable = image_3button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 5
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    SliderComponent slider_2
      borderColor = black
      forceEndRoutine = False
      granularity = 0.1
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1, 0.05)
      startVal [time (s)] = 5
      styles = rating
      ticks = (1,10)
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    TextComponent text_6
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (-0.5, -0.2)
      startVal [time (s)] = 5
      text = 非常消极
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    TextComponent text_7
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0.46, -0.2)
      startVal [time (s)] = 5
      text = 一点都不消极
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  Routine horriblepic_evl1
    ImageComponent image_hopic_evl1
      image = hopic_evl1.png
      size = (1.2, 1)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      borderColor = black
      forceEndRoutine = False
      granularity = 7
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine horriblepic_evl2
  Routine phase2intro
    ImageComponent image_phase2intro
      image = img/img_instruction/ph2intro.png
      pos = (0, 0.1)
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_12
      image = img/img_axis/ax5.png
      pos = (0, -0.1)
      size = (0.15, 0.4)
      startVal [time (s)] = 0.0
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  Routine phase4intro
    ImageComponent image_4
      image = img/img_instruction/ph4intro.png
      size = (1.2, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase3intro
    ImageComponent image_2
      image = img/img_instruction/ph3intro.png
      size = (1.2, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ph4threat_image
    ImageComponent image_5
      image = img/img_horriblethreat/horriblethreatfinal.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine countdown
    TextComponent text_countdownsecond
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $countdownsec
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  Routine fixation2
    TextComponent text_fixation2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine phase3_2
  Routine Phase2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        list_1 = [1,2,3,4,5,6,7,8,9]
        list_2 = [1,2,3,4,5,6,7,8,9]
        list_3 = [1,2,3,4,5,6,7,8,9]
        list_4 = [1,2,3,4,5,6,7,8,9]
        pic_1 = ''
        pic_2 = ''
        pic_3 = ''
        pic_4 = ''
        loc_x_1 = 0
        loc_x_2 = 0
        loc_x_3 = 0
        loc_x_4 = 0
        list_1_remove = []
        list_2_remove = []
        list_3_remove = []
        list_4_remove = []
      Begin Routine:
        list_loc_1 = [-0.35,-0.05,0.25,0.55]
        shuffle(list_1)
        shuffle(list_2)
        shuffle(list_3)
        shuffle(list_4)
        shuffle(list_loc_1)
        loc_x_1 = list_loc_1[0]
        loc_x_2 = list_loc_1[1]
        loc_x_3 = list_loc_1[2]
        loc_x_4 = list_loc_1[3]

        if list_1[0] == 1:
            pic_1 = ph2_pic60_1
            list_1_remove.append(1)

        if list_1[0] == 2:
            pic_1 = ph2_pic60_2
            list_1_remove.append(2)
        if list_1[0] == 3:
            pic_1 = ph2_pic60_3
            list_1_remove.append(3)

        if list_1[0] == 4:
            pic_1 = ph2_pic60_4
            list_1_remove.append(4)

        if list_1[0] == 5:
            pic_1 = ph2_pic60_5
            list_1_remove.append(5)

        if list_1[0] == 6:
            pic_1 = ph2_pic60_6
            list_1_remove.append(6)

        if list_1[0] == 7:
            pic_1 = ph2_pic60_7
            list_1_remove.append(7)

        if list_1[0] == 8:
            pic_1 = ph2_pic60_8
            list_1_remove.append(8)
        if list_1[0] == 9:
            pic_1 = ph2_pic60_9
            list_1_remove.append(9)

        temp_1 = list_1[0]
        temp_2 = list_2[0]
        temp_3 = list_3[0]
        temp_4 = list_4[0]
        if list_2[0] == 1:
            pic_2 = ph2_pic70_1
            list_2_remove.append(1)

        if list_2[0] == 2:
            pic_2 = ph2_pic70_2
            list_2_remove.append(2)

        if list_2[0] == 3:
            pic_2 = ph2_pic70_3
            list_2_remove.append(3)

        if list_2[0] == 4:
            pic_2 = ph2_pic70_4
            list_2_remove.append(4)

        if list_2[0] == 5:
            pic_2 = ph2_pic70_5
            list_2_remove.append(5)

        if list_2[0] == 6:
            pic_2= ph2_pic70_6
            list_2_remove.append(6)

        if list_2[0] == 7:
            pic_2 = ph2_pic70_7
            list_2_remove.append(7)

        if list_2[0] == 8:
            pic_2 = ph2_pic70_8
            list_2_remove.append(8)

        if list_2[0] == 9:
            pic_2 = ph2_pic70_9
            list_2_remove.append(9)

        if list_3[0] == 1:
            pic_3 = ph2_pic80_1
            list_3_remove.append(1)

        if list_3[0] == 2:
            pic_3 = ph2_pic80_2
            list_3_remove.append(2)

        if list_3[0] == 3:
            pic_3 = ph2_pic80_3
            list_3_remove.append(3)

        if list_3[0] == 4:
            pic_3 = ph2_pic80_4
            list_3_remove.append(4)

        if list_3[0] == 5:
            pic_3 = ph2_pic80_5
            list_3_remove.append(5)

        if list_3[0] == 6:
            pic_3 = ph2_pic80_6
            list_3_remove.append(6)

        if list_3[0] == 7:
            pic_3 = ph2_pic80_7
            list_3_remove.append(7)

        if list_3[0] == 8:
            pic_3 = ph2_pic80_8
            list_3_remove.append(8)

        if list_3[0] == 9:
            pic_3 = ph2_pic80_9
            list_3_remove.append(9)

        if list_4[0] == 1:
            pic_4 = ph2_pic90_1
            list_4_remove.append(1)

        if list_4[0] == 2:
            pic_4 = ph2_pic90_2
            list_4_remove.append(2)

        if list_4[0] == 3:
            pic_4 = ph2_pic90_3
            list_4_remove.append(3)

        if list_4[0] == 4:
            pic_4 = ph2_pic90_4
            list_4_remove.append(4)

        if list_4[0] == 5:
            pic_4 = ph2_pic90_5
            list_4_remove.append(5)

        if list_4[0] == 6:
            pic_4 = ph2_pic90_6
            list_4_remove.append(6)

        if list_4[0] == 7:
            pic_4 = ph2_pic90_7
            list_4_remove.append(7)

        if list_4[0] == 8:
            pic_4 = ph2_pic90_8
            list_4_remove.append(8)

        if list_4[0] == 9:
            pic_4 = ph2_pic90_9
            list_4_remove.append(9)
      End Routine:
        list_temp1=[]
        list_temp2=[]
        list_temp3=[]
        list_temp4=[]
        if len(list_1)>1:
            for i in list_1:
                if i not in list_1_remove:
                    list_temp1.append(i)
            list_1 = list_temp1
        if len(list_2)>1:
            for i in list_2:
                if i not in list_2_remove:
                    list_temp2.append(i)
            list_2 = list_temp2
        if len(list_3)>1:
            for i in list_3:
                if i not in list_3_remove:
                    list_temp3.append(i)
            list_3 = list_temp3
        if len(list_4)>1:
            for i in list_4:
                if i not in list_4_remove:
                    list_temp4.append(i)
            list_4 = list_temp4

        thisExp.addData("loc_x_1",loc_x_1)
        thisExp.addData("loc_x_2",loc_x_2)
        thisExp.addData("loc_x_3",loc_x_3)
        thisExp.addData("loc_x_4",loc_x_4)
        thisExp.addData("list_1_remove",list_1_remove)
        thisExp.addData("list_2_remove",list_2_remove)
        thisExp.addData("list_3_remove",list_3_remove)
        thisExp.addData("list_4_remove",list_4_remove)

        print(list_1_remove)
        print(list_2_remove)
        print(list_3_remove)
        print(list_4_remove)
        print(loc_x_1)
        print(loc_x_2)
        print(loc_x_3)
        print(loc_x_4)
    ImageComponent image_phase2instru
      image = img/img_instruction/ph2.png
      pos = (0, 0.1)
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    ImageComponent image_ax1
      image [set every repeat] = $pic_1
      pos [set every repeat] = (loc_x_1,0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_ax2
      image [set every repeat] = $pic_2
      pos [set every repeat] = (loc_x_2,0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_ax3
      image [set every repeat] = $pic_3
      pos [set every repeat] = (loc_x_3,0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_ax4
      image [set every repeat] = $pic_4
      pos [set every repeat] = (loc_x_4,0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_buttonA
      image [set every repeat] = img/img_button_ph2/button_A.jpg
      pos = (-0.35, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_buttonB
      image [set every repeat] = img/img_button_ph2/button_B.jpg
      pos = (-0.05, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_buttonC
      image [set every repeat] = img/img_button_ph2/button_C.jpg
      pos = (0.25, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_buttonD
      image [set every repeat] = img/img_button_ph2/button_D.jpg
      pos = (0.55, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_personpic
      image [set every repeat] = $person_img
      pos = (-0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_A
      clickable = image_buttonA,image_buttonB,image_buttonC,image_buttonD
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    MouseComponent mouse_B
      clickable = image_buttonA,image_buttonB,image_buttonC,image_buttonD
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    MouseComponent mouse_C
      clickable = image_buttonA,image_buttonB,image_buttonC,image_buttonD
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    MouseComponent mouse_D
      clickable = image_buttonA,image_buttonB,image_buttonC,image_buttonD
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_personname
      color = black
      letterHeight = 0.05
      pos = (-0.6, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $person_name
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    ImageComponent image_ph2axisnow1
      image = img/img_button/4axis_now.jpg
      pos = (-0.338, -0.31)
      size = (0.09, 0.055)
      startVal [time (s)] = 0.0
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    ImageComponent image_ph2axisnow2
      image = img/img_button/4axis_now.jpg
      pos = (-0.038, -0.31)
      size = (0.09, 0.055)
      startVal [time (s)] = 0.0
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    ImageComponent image_ph2axisnow3
      image = img/img_button/4axis_now.jpg
      pos = (0.262, -0.31)
      size = (0.09, 0.055)
      startVal [time (s)] = 0.0
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    ImageComponent image_ph2axisnow4
      image = img/img_button/4axis_now.jpg
      pos = (0.562, -0.31)
      size = (0.09, 0.055)
      startVal [time (s)] = 0.0
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  Routine waiting_phase
    TextComponent text
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0.05, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 其他实验参与者在进入中，请稍候…
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    TextComponent text_1
      color = black
      letterHeight = 0.05
      pos = (-0.06, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $a
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (-0.06, 0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $b
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (-0.06, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $c
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (-0.06, 0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $d
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    TextComponent text_5
      color = black
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text =            已经有              名实验参与者进入
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  Routine practice_phase
    ImageComponent image_3
      image = img/img_button_ph2/button_A.jpg
      pos = (-0.3,0)
      size = (0.2,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image = img/img_button_ph2/button_B.jpg
      pos = (0.3,0)
      size = (0.2,0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = image_3,image_6
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine practice_phase_feedback
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:

        if mouse_4.isPressedIn(image_3):
            axNum=24;
            print(axNum)

        else:
            axNum=28
            print(axNum)
      Each Frame:
        time_left = task_timer.getTime()
        msecs = int(time_left*1000)
        text_clock.text= str(int(msecs))
      End Routine:
        text_clock.setAutoDraw(False)
    ImageComponent image_7
      image [set every repeat] = $'img/img_axis/ax'+str(axNum) + '.png'
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine practice_phase_countdown
  Routine phase3_practicechoice
    ImageComponent imagepracticeAbutton
      image = img/img_button/1button.jpg
      pos = (-0.2, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imagepracticeBbutton
      image = img/img_button/2button.jpg
      pos = (0.2, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      clickable = imagepracticeAbutton,imagepracticeBbutton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        time_show=0
      End Routine:
        if mouse.isPressedIn(imagepracticeAbutton):
            time_show=7
        else:
            time_show=9
    ImageComponent image_practiceaxis1
      image = img/img_axis/ax27.png
      pos = (-0.2, 0)
      size = (0.2, 0.67)
      startVal [time (s)] = 0.0
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    ImageComponent image_practiceaxis2
      image = img/img_axis/ax36.png
      pos = (0.2, 0)
      size = (0.2, 0.67)
      startVal [time (s)] = 0.0
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    ImageComponent image_11
      image = img/img_instruction/ph3_practiceinstr.png
      pos = (0, 0.29)
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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  Routine phase3_practicecountdown
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        text_word = ''
      Begin Routine:
        text_word = str(time_show) + 's'
      End Routine:
        time_show -= 1
    TextComponent text_8
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $text_word
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  Routine phase3_practicepic
    ImageComponent image_10
      image = img/img_horriblethreat/horriblethreatpractice.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine phase3_practiceinstr
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      image = img/img_instruction/ph3_practiceinstr.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine phase3_formalinstr
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_9
      image = img/img_instruction/ph3_formalinstr.png
      size = (1.2, 0.65)
      startVal [time (s)] = 0.0
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  Routine countdownsec
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        countdown_time= 6
      Begin Routine:
        text_word = str(countdown_time) + 's'
      End Routine:
        countdown_time -= 1
    TextComponent text_11
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $countdown_time
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  Routine waiting_phase2
    TextComponent text_9
      color = black
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $person_num1
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    TextComponent text_10
      color = black
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $person_num2
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    TextComponent text_12
      color = black
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $person_num3
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    TextComponent text_13
      color = black
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $person_num4
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    ImageComponent image_14
      image = img/img_instruction/waiting_phase2a.png
      pos = (0, 0.2)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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    ImageComponent image_15
      image = img/img_instruction/waiting_phase2b.png
      pos = (0, -0.15)
      size = (1.7, 0.68)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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  Routine waiting_phase_2next
    ImageComponent image_13
      image = img/img_instruction/waiting_phase2next.png
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ph1_threshold_measurement
    TextComponent text_14
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        首先对你进行电击，请你对每一次电击进行评分：
        （0 = “一点都不疼”，10 = “疼到无法忍受”）
    SliderComponent slider_3
      borderColor = black
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    MouseComponent mouse_6
      clickable = image_nextpage,image_23
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_nextpage
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_23
      image = img/img_button/4button.png
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        if mouse_6.isPressedIn(image_23):
            trials_6.finished = True
  Routine ph2intro
    ImageComponent image_phase1intro
      image = img/img_instruction/ph2instr.png
      size = (1.2,0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ph2_1
    TextComponent person_name
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (-0.6, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pic_name
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    ImageComponent person_img
      image [set every repeat] = $pic_person
      pos = (-0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_sti_left
      image = img/img_button/ph2stimuli.png
      pos = (-0.25, 0)
      size = (0.35, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_sti_right
      image = img/img_button/ph2stimuli.png
      pos = (0.25, 0)
      size = (0.35, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_buttonLeft
      image = img/img_button/1button.jpg
      pos = (-0.25, -0.3)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_buttonRight
      image = img/img_button/2button.jpg
      pos = (0.25, -0.3)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instr
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = 请你选择对此实验参与者施加电击的强度:
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    TextComponent text_eL
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (-0.195, 0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $elec_left
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    TextComponent text_mL
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (-0.195, -0.04)
      startVal [time (s)] = 0.0
      text [set every repeat] = $money_left
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    TextComponent text_eR
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0.31, 0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $elec_right
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    TextComponent text_mR
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0.31, -0.04)
      startVal [time (s)] = 0.0
      text [set every repeat] = $money_right
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    MouseComponent mouse_8
      clickable = image_buttonLeft,image_buttonRight
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine ph2_2
    SliderComponent slider_4
      borderColor = black
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent instr2
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        请你选择对此实验参与者施加电击的时间:
        （数轴上的数字代表第几周施加电击）
    MouseComponent mouse_7
      clickable = Nextpage
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent Nextpage
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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  Routine ph3instr
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_20
      image = img/img_instruction/ph3instr.png
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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  Routine ph3
    ImageComponent image_stimu_left
      image = img/img_button/ph3stimuli.png
      pos = (-0.25, 0)
      size = (0.35, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent buttonleft
      image = img/img_button/1button.jpg
      pos = (-0.25, -0.3)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_stimu_right
      image = img/img_button/ph3stimuli.png
      pos = (0.25, 0)
      size = (0.35, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent buttonright
      image = img/img_button/2button.jpg
      pos = (0.25, -0.3)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_instr
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        以下是两个实验参与者为你分配的电击强度和时间，
        如果有10个代币的奖励可以由你进行分配，
        你会将奖励分配给左边的人还是右边的人？
    TextComponent text_el
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (-0.23, 0.08)
      startVal [time (s)] = 0.0
      text = el
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    TextComponent text_tl
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (-0.23, -0.04)
      startVal [time (s)] = 0.0
      text = tl
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    TextComponent text_er
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0.275, 0.08)
      startVal [time (s)] = 0.0
      text = er
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    TextComponent text_tr
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0.275, -0.04)
      startVal [time (s)] = 0.0
      text = tr
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    MouseComponent mouse_9
      clickable = buttonleft,buttonright
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine ph2
    TextComponent text_19
      color = red
      letterHeight = 0.1
      pos = (0.35, -0.25)
      startVal [time (s)] = 25
      text [set every repeat] = $elec_intensity
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    ImageComponent image_16
      image [set every repeat] = $ph2_stimuli_instr
      pos = (0, 0.2)
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_17
      image [set every repeat] = $ph2_stimuli
      pos = (0, -0.1)
      size = (0.9, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 25
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    TextComponent text_15
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 25
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      text:
        这位学生选择对你施加强度为      的电击，请点击”空格键”进行下一次
    TextComponent text_18
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 24.8
      text = 请等待这位学生做出选择…
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  Routine ph2scales
    SliderComponent slider_5
      borderColor = black
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.05)
      startVal [time (s)] = 1
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ImageComponent image_18
      image [set every repeat] = $scales
      size = (1.15, 0.5)
      startVal [time (s)] = 1
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    TextComponent text_20
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_45
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 3
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    MouseComponent mouse_19
      clickable = image_45
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 3
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  Routine ph3_2
  Routine ph
  Routine pha3
  Routine Ph3
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        day_num1 = ''
        day_num2 = ''
        list_pic1 = ['img/img_person/py1.png','img/img_person/py2.png','img/img_person/py3.png','img/img_person/py4.png','img/img_person/py5.png','img/img_person/py6.png','img/img_person/py7.png','img/img_person/py8.png','img/img_person/py9.png','img/img_person/py10.png']
        list_pic2 = ['img/img_person/py11.png','img/img_person/py12.png','img/img_person/py13.png','img/img_person/py14.png','img/img_person/py15.png','img/img_person/py16.png','img/img_person/py17.png','img/img_person/py18.png','img/img_person/py19.png','img/img_person/py20.png']
        shuffle(list_pic1)
        shuffle(list_pic2)

        #list_day = [1,2,3,4,5,6,7]
        temp_1 = 0
        temp_2 = 0
        temp_day1 = 0
        temp_day2 = 0
        list_pic = []
        list_pic_days = []
        cnt = 0
      Begin Routine:
        #shuffle(list_day)
        #week number = index
        if list_pic1.index(pic_loc1) != list_pic2.index(pic_loc2):
            cnt += 1
            #not in = not repeat
            if pic_loc1 not in list_pic:
                #temp_day1 = (list_pic1.index(pic_loc1)*7) + list_day[0]
                temp_day1 = list_pic1.index(pic_loc1) + 1
                list_pic.append(pic_loc1)
                list_pic_days.append(temp_day1)
            else:
                temp_day1 = list_pic_days[list_pic.index(pic_loc1)]
            if pic_loc2 not in list_pic:
                temp_day2 = list_pic2.index(pic_loc2) + 1
                list_pic.append(pic_loc2)
                list_pic_days.append(temp_day2)
            else:
                temp_day2 = list_pic_days[list_pic.index(pic_loc2)]
        else:
            continueRoutine = False
        day_num1 = str(temp_day1) + '周'
        day_num2 = str(temp_day2) + '周'

        print(list_pic_days,'list_pic_days')
      End Routine:
        thisExp.addData('day_num1',temp_day1)
        thisExp.addData('day_num2',temp_day2)
        thisExp.addData('cnt',cnt)
    ImageComponent image_ph3instr
      image = img/img_instruction/ph3instr.png
      pos = (0, 0.1)
      size = (1.2, 0.8)
      startVal [time (s)] = 2.05
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    ImageComponent image_19
      image [set every repeat] = $pic_loc1
      pos = (-0.2, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 2.05
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    ImageComponent image_21
      image [set every repeat] = $pic_loc2
      pos = (0.2, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 2.05
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    TextComponent text_16
      color = red
      font = STSong
      letterHeight = 0.05
      pos = (-0.2, -0.15)
      startVal [time (s)] = 2.05
      text [set every repeat] = $day_num1
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    TextComponent text_17
      color = red
      font = STSong
      letterHeight = 0.05
      pos = (0.2, -0.15)
      startVal [time (s)] = 2.05
      text [set every repeat] = $day_num2
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    MouseComponent mouse_10
      clickable = image_19,image_21
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 2.05
      syncScreenRefresh = True
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    TextComponent text_22
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine logotestintro
    ImageComponent image_24
      image = img/img_instruction/logotestintro.png
      pos = (0,-0.15)
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent image_nextbutton_2
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_14
      clickable = image_nextbutton_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine logotest_1
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        list_1 = [1,2,3]
        list_2 = [1,2,3]
        list_3 = [1,2,3]
        pic_1 = ''
        pic_2 = ''
        pic_3 = ''
        pic_4 = ''
        loc_x_1 = 0
        loc_x_2 = 0
        loc_x_3 = 0
        loc_x_4 = 0
        m = 0
        pic_show=''
        timescountdown=''
      Begin Routine:
        list_loc_1 = [-0.45,-0.15,0.15,0.45]
        shuffle(list_1)
        shuffle(list_2)
        shuffle(list_3)
        shuffle(list_loc_1)
        loc_x_1 = list_loc_1[0]
        loc_x_2 = list_loc_1[1]
        loc_x_3 = list_loc_1[2]
        loc_x_4 = list_loc_1[3]


        if list_10[0] == 1:
            pic_4 = myself_1

        if list_10[0] == 2:
            pic_4 = myself_2

        if list_10[0] == 3:
            pic_4 = myself_3

        if list_10[0] == 4:
            pic_4 = myself_4

        if list_10[0] == 5:
            pic_4 = myself_5

        if list_10[0] == 6:
            pic_4 = myself_6

        if list_10[0] == 7:
            pic_4 = myself_7

        if list_10[0] == 8:
            pic_4 = myself_8

        if list_10[0] == 9:
            pic_4 = myself_9

        if list_10[0] == 10:
            pic_4 = myself_10

        if list_10[0] == 11:
            pic_4 = myself_11

        if list_10[0] == 12:
            pic_4 = myself_12

        if list_10[0] == 13:
            pic_4 = myself_13

        if list_10[0] == 14:
            pic_4 = myself_14

        if list_10[0] == 15:
            pic_4 = myself_15

        if list_10[0] == 16:
            pic_4 = myself_16

        if list_10[0] == 17:
            pic_4 = myself_17

        if list_10[0] == 18:
            pic_4 = myself_18

        if list_10[0] == 19:
            pic_4 = myself_19

        if list_10[0] == 20:
            pic_4 = myself_20

        if list_1[0] == 1:
            pic_1 = PIC_A

        if list_1[0] == 2:
            pic_1 = PIC_B

        if list_1[0] == 3:
            pic_1 = PIC_C

        if list_2[0] == 1:
            pic_2 = PIC_D

        if list_2[0] == 2:
            pic_2 = PIC_E

        if list_2[0] == 3:
            pic_2 = PIC_F

        if list_3[0] == 1:
            pic_3 = PIC_G

        if list_3[0] == 2:
            pic_3 = PIC_H

        if list_3[0] == 3:
            pic_3 = PIC_I
      End Routine:
        if mouse_12.isPressedIn(img_4):
                timescountdown= 1
                pic_show = PIC_right
                m = m+1
                if m >=3 :
                   pic_show = PIC_pass
                   timescountdown= 3
                   trials.finished = True
        else:
                pic_show = PIC_wrong
                timescountdown= 5
                m = 0
    ImageComponent img_1
      image [set every repeat] = $pic_1
      pos [set every repeat] = (loc_x_1, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent img_2
      image [set every repeat] = $pic_2
      pos [set every repeat] = (loc_x_2, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent img_3
      image [set every repeat] = $pic_3
      pos [set every repeat] = (loc_x_3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent img_4
      image [set every repeat] = $pic_4
      pos [set every repeat] = (loc_x_4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_12
      clickable = img_1,img_2,img_3,img_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        pic_5=''
        pic_logo=''
      Begin Routine:
        if list_10[0] == 1:
            pic_5 = myself_1

        if list_10[0] == 2:
            pic_5 = myself_2

        if list_10[0] == 3:
            pic_5 = myself_3

        if list_10[0] == 4:
            pic_5 = myself_4

        if list_10[0] == 5:
            pic_5 = myself_5

        if list_10[0] == 6:
            pic_5 = myself_6

        if list_10[0] == 7:
            pic_5 = myself_7

        if list_10[0] == 8:
            pic_5 = myself_8

        if list_10[0] == 9:
            pic_5 = myself_9

        if list_10[0] == 10:
            pic_5 = myself_10

        if list_10[0] == 11:
            pic_5 = myself_11

        if list_10[0] == 12:
            pic_5 = myself_12

        if list_10[0] == 13:
            pic_5 = myself_13

        if list_10[0] == 14:
            pic_5 = myself_14

        if list_10[0] == 15:
            pic_5 = myself_15

        if list_10[0] == 16:
            pic_5 = myself_16

        if list_10[0] == 17:
            pic_5 = myself_17

        if list_10[0] == 18:
            pic_5 = myself_18

        if list_10[0] == 19:
            pic_5 = myself_19

        if list_10[0] == 20:
            pic_5 = myself_20
      End Routine:
        if mouse_12.isPressedIn(img_4):
                pic_logo = blank

        else:
                pic_logo = pic_5
    ImageComponent image_41
      image = img/img_instruction/logotest1intro.png
      pos = (0, -0.1)
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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  Routine logotest_2
    ImageComponent image_25
      image [set every repeat] = $pic_show
      pos = (0, -0.2)
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent image_28
      image [set every repeat] = $pic_logo
      pos = (0, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent code_15
      Code Type = Auto->JS
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      End Routine:
        timescountdown-= 0
  Routine phas
  Routine PHASE2intro
    ImageComponent image_26
      image [set every repeat] = $ph2intropre
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_15
      clickable = image_nextbutton_3
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_nextbutton_3
      image [set every repeat] = $button
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent image_39
      image [set every repeat] = $ph2intro_img
      pos = (0, -0.15)
      size = (0.55, 0.3)
      startVal [time (s)] = 0.0
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  Routine ph2scaleintro
    TextComponent text_21
      color = black
      font = STSong
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        根据刚才那位同学的所有选择，请评价你的情绪反应。

        如果准备好，请点击“下一页”开始。
    ImageComponent image_nextbutton_4
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_16
      clickable = image_nextbutton_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine PHASE3instr
    ImageComponent image_27
      image = img/img_instruction/PHASE3instr0928.png
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent image_34
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0
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    MouseComponent mouse_17
      clickable = image_34
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine ph2v2test
    CodeComponent code_12
      Code Type = Auto->JS
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      End Routine:
        time_dw -= 1
    ImageComponent image_29
      image [set every repeat] = $student_IMG
      pos = (0, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.5
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    TextComponent text_27
      color = black
      font = STSong
      letterHeight = 0.035
      pos = (0, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = 决策者正在作出选择.
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    TextComponent text_24
      color = black
      font = STSong
      letterHeight = 0.035
      pos = (0, 0.03)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      text = 决策者正在作出选择. .
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    TextComponent text_26
      color = black
      font = STSong
      letterHeight = 0.035
      pos = (0, 0.03)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
      text = 决策者正在作出选择. . .
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    ImageComponent image_30
      image [set every repeat] = $ph2_stimuli
      pos = (0, -0.15)
      size = (0.9, 0.26)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.5
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  Routine ph2match
    TextComponent text_29
      color = black
      font = STSong
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 正在等待决策者进入实验任务页面，请稍等.
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    TextComponent text_30
      color = black
      font = STSong
      letterHeight = 0.035
      startVal [time (s)] = 2.05
      stopVal [duration (s)] = 2
      text = 正在等待决策者进入实验任务页面，请稍等. .
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    TextComponent text_31
      color = black
      font = STSong
      letterHeight = 0.035
      startVal [time (s)] = 4.05
      stopVal [duration (s)] = 2.0
      text = 正在等待决策者进入实验任务页面，请稍等. . .
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  Routine ph2v2test_1
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Experiment:
        startmoney=0
      Begin Routine:
        startmoney=startmoney+elec_intensity

        money = '决策者的选择如下图，决策者累计获得奖励'+str(startmoney)+'元'
    ImageComponent image_31
      image [set every repeat] = $student_IMG
      pos = (0, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent image_32
      image [set every repeat] = $ph2_stimuli_2
      pos = (0, -0.15)
      size = (0.95, 0.3)
      startVal [time (s)] = 0
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    ImageComponent image_33
      image = img/img_button/5button.png
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0
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    MouseComponent mouse_13
      clickable = image_33
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0
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    TextComponent text_32
      color = black
      font = STSong
      letterHeight = 0.035
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $money
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  Routine time_down_num
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Experiment:
        list_timedown = [2,3,4]
      Begin Routine:
        shuffle(list_timedown)
        time_dw = list_timedown[0]
  Routine PHASE2intro_2
    ImageComponent image_22
      image = img/img_instruction/PHASE2intro_1.png
      size = (1, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_35
      image = img/img_instruction/PHASE2intro_2.png
      pos = (0, -0.15)
      size = (1, 0.4)
      startVal [time (s)] = 7.55
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    ImageComponent image_36
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 7.55
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    MouseComponent mouse_11
      clickable = image_36
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 7.55
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    TextComponent text_25
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 决策者
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    TextComponent text_33
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.07)
      startVal [time (s)] = 0.505
      stopVal [duration (s)] = 0.5
      text = 承受者
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    TextComponent text_34
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.07)
      startVal [time (s)] = 1.05
      stopVal [duration (s)] = 0.5
      text = 决策者
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    TextComponent text_35
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.07)
      startVal [time (s)] = 1.55
      stopVal [duration (s)] = 0.5
      text = 承受者
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    TextComponent text_36
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.07)
      startVal [time (s)] = 2.05
      stopVal [duration (s)] = 0.5
      text = 决策者
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    TextComponent text_37
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.07)
      startVal [time (s)] = 2.55
      stopVal [duration (s)] = 0.5
      text = 承受者
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    TextComponent text_38
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.07)
      startVal [time (s)] = 3.05
      stopVal [duration (s)] = 0.5
      text = 决策者
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    TextComponent text_39
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.07)
      startVal [time (s)] = 3.55
      stopVal [duration (s)] = 0.5
      text = 承受者
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    TextComponent text_40
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.07)
      startVal [time (s)] = 4.05
      stopVal [duration (s)] = 0.5
      text = 决策者
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    TextComponent text_41
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.07)
      startVal [time (s)] = 4.55
      text = 承受者
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  Routine ph2v2testpre
    ImageComponent image_42
      image [set every repeat] = $student_IMG
      pos = (0, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
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    TextComponent text_23
      color = black
      font = STSong
      letterHeight = 0.035
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = 这位决策者已经上线，马上准备开始任务
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  Routine ph2v2test_code
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Experiment:
        student_IMG=''

        list_11=[1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20]

        shuffle(list_11)
        time_dw = 0
        timedown = ''
      Begin Routine:
        if list_11[0] == 1:
            student_IMG = student_1

        if list_11[0] == 2:
            student_IMG = student_2

        if list_11[0] == 3:
            student_IMG = student_3

        if list_11[0] == 4:
            student_IMG = student_4

        if list_11[0] == 5:
            student_IMG = student_5

        if list_11[0] == 6:
            student_IMG = student_6

        if list_11[0] == 7:
            student_IMG = student_7

        if list_11[0] == 8:
            student_IMG = student_8

        if list_11[8] == 9:
            student_IMG = student_9

        if list_11[0] == 10:
            student_IMG = student_10

        if list_11[0] == 11:
            student_IMG = student_11

        if list_11[0] == 12:
            student_IMG = student_12

        if list_11[0] == 13:
            student_IMG = student_13

        if list_11[0] == 14:
            student_IMG = student_14

        if list_11[0] == 15:
            student_IMG = student_15

        if list_11[0] == 16:
            student_IMG = student_16

        if list_11[0] == 17:
            student_IMG = student_17

        if list_11[0] == 18:
            student_IMG = student_18

        if list_11[0] == 19:
            student_IMG = student_19

        if list_11[0] == 20:
            student_IMG = student_20

        timedown = '倒计时'+str(time_dw)
  Routine PHASE3instr_2
    TextComponent text_43
      color = red
      font = STSong
      letterHeight = 0.03
      pos = (0.2, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_right
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    TextComponent text_42
      color = red
      font = STSong
      letterHeight = 0.03
      pos = (-0.2, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_left
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    ImageComponent image_37
      image [set every repeat] = $ph3intro_2
      pos = (0, 0.05)
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent image_38
      image [set every repeat] = $button_ph3intro_2
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_18
      clickable = image_38
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_43
      image [set every repeat] = $ph3intro_2_personleftimg
      pos = (-0.2, 0.07)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_44
      image [set every repeat] = $ph3intro_2_personrightimg
      pos = (0.2, 0.07)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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  Routine PHASE2intro2
    ImageComponent image_46
      image [set every repeat] = $ph2intropre2
      pos = (0, -0.1)
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent image_47
      image [set every repeat] = $button_2
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_20
      clickable = image_46
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine PHASE3intr_3
    ImageComponent image_48
      image [set every repeat] = $ph3intro_3
      pos = (0, 0.05)
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent image_49
      image [set every repeat] = $button_ph3intro_3
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent image_50
      image [set every repeat] = $ph3intro_3_personleftimg
      pos = (-0.2, 0.16)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_51
      image [set every repeat] = $ph3intro_3_personrightimg
      pos = (0.2, 0.16)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_44
      color = red
      font = STSong
      letterHeight = 0.03
      pos = (0.2, 0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_right_2
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    TextComponent text_45
      color = red
      font = STSong
      letterHeight = 0.03
      pos = (-0.2, 0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_left_2
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    MouseComponent mouse_21
      clickable = image_49
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine PHASE2intro_role
    TextComponent text_46
      color = black
      font = STSong
      letterHeight = 0.035
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      text = 你所在班级被分配的角色是：
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    TextComponent text_47
      color = red
      font = STSong
      letterHeight = 0.035
      pos = (0, -0.03)
      startVal [time (s)] = 0
      text = 承受者
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    MouseComponent mouse_22
      clickable = image_52
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0
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    ImageComponent image_52
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0
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  Routine ph3_prequestion
    ImageComponent image_53
      image = img/img_instruction/PHASE3question.png
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent image_54
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_23
      clickable = image_54
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials_5 loopType="TrialHandler"
    conditions = [{'myself_1': 'img/img_person/myself1.png', 'myself_2': 'img/img_person/myself2.png', 'myself_3': 'img/img_person/myself3.png', 'myself_4': 'img/img_person/myself4.png', 'myself_5': 'img/img_person/myself5.png', 'myself_6': 'img/img_person/myself6.png', 'myself_7': 'img/img_person/myself7.png', 'myself_8': 'img/img_person/myself8.png', 'myself_9': 'img/img_person/myself9.png', 'myself_10': 'img/img_person/myself10.png', 'myself_11': 'img/img_person/myself11.png', 'myself_12': 'img/img_person/myself12.png', 'myself_13': 'img/img_person/myself13.png', 'myself_14': 'img/img_person/myself14.png', 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
    conditionsFile = cond/myself_cond0914.xlsx
    loopType = random
    nReps = 1
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    Routine intro
  LoopTerminator trials_5
  Routine logotestintro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond/cond0901.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'PIC_A': 'img/img_person/person_opt1.png', 'PIC_B': 'img/img_person/person_opt2.png', 'PIC_C': 'img/img_person/person_opt3.png', 'PIC_D': 'img/img_person/person_opt4.png', 'PIC_E': 'img/img_person/person_opt5.png', 'PIC_F': 'img/img_person/person_opt6.png', 'PIC_G': 'img/img_person/person_opt7.png', 'PIC_H': 'img/img_person/person_opt8.png', 'PIC_I': 'img/img_person/person_opt9.png', 'PIC_wrong': 'img/img_person/wrong.png', 'PIC_right': 'img/img_person/right.png', 'PIC_pass': 'img/img_person/pass.png', 'PIC_gameover': 'img/img_person/over.png', 'myself_1': 'img/img_person/myself1.png', 'myse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,
      {'PIC_A': 'img/img_person/person_opt1.png', 'PIC_B': 'img/img_person/person_opt2.png', 'PIC_C': 'img/img_person/person_opt3.png', 'PIC_D': 'img/img_person/person_opt4.png', 'PIC_E': 'img/img_person/person_opt5.png', 'PIC_F': 'img/img_person/person_opt6.png', 'PIC_G': 'img/img_person/person_opt7.png', 'PIC_H': 'img/img_person/person_opt8.png', 'PIC_I': 'img/img_person/person_opt9.png', 'PIC_wrong': 'img/img_person/wrong.png', 'PIC_right': 'img/img_person/right.png', 'PIC_pass': 'img/img_person/pass.png', 'PIC_gameover': 'img/img_person/over.png', 'myself_1': 'img/img_person/myself1.png', 'mysel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,
      {'PIC_A': 'img/img_person/person_opt1.png', 'PIC_B': 'img/img_person/person_opt2.png', 'PIC_C': 'img/img_person/person_opt3.png', 'PIC_D': 'img/img_person/person_opt4.png', 'PIC_E': 'img/img_person/person_opt5.png', 'PIC_F': 'img/img_person/person_opt6.png', 'PIC_G': 'img/img_person/person_opt7.png', 'PIC_H': 'img/img_person/person_opt8.png', 'PIC_I': 'img/img_person/person_opt9.png', 'PIC_wrong': 'img/img_person/wrong.png', 'PIC_right': 'img/img_person/right.png', 'PIC_pass': 'img/img_person/pass.png', 'PIC_gameover': 'img/img_person/over.png', 'myself_1': 'img/img_person/myself1.png', 'mysel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,
      {'PIC_A': 'img/img_person/person_opt1.png', 'PIC_B': 'img/img_person/person_opt2.png', 'PIC_C': 'img/img_person/person_opt3.png', 'PIC_D': 'img/img_person/person_opt4.png', 'PIC_E': 'img/img_person/person_opt5.png', 'PIC_F': 'img/img_person/person_opt6.png', 'PIC_G': 'img/img_person/person_opt7.png', 'PIC_H': 'img/img_person/person_opt8.png', 'PIC_I': 'img/img_person/person_opt9.png', 'PIC_wrong': 'img/img_person/wrong.png', 'PIC_right': 'img/img_person/right.png', 'PIC_pass': 'img/img_person/pass.png', 'PIC_gameover': 'img/img_person/over.png', 'myself_1': 'img/img_person/myself1.png', 'mysel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
    Routine logotest_1
    LoopInitiator trials_7 loopType="TrialHandler"
      loopType = random
      nReps = timescountdown
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      Routine logotest_2
    LoopTerminator trials_7
  LoopTerminator trials
  LoopInitiator trials_9 loopType="TrialHandler"
    conditionsFile = cond/PHASE2intropre.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ph2intropre': 'img/img_instruction/PHASE2intropre1.png', 'ph2intro_img': 'img/img_person/blank.png', 'button': 'img/img_button/4button.png'},
      {'ph2intropre': 'img/img_instruction/PHASE2intropre2.png', 'ph2intro_img': 'img/img_instruction/PHASE2intro_pic.png', 'button': 'img/img_button/4button.png'},
      {'ph2intropre': 'img/img_instruction/PHASE2intropre3.png', 'ph2intro_img': 'img/img_instruction/PHASE2intro_pic.png', 'button': 'img/img_button/4button.png'},
      {'ph2intropre': 'img/img_instruction/PHASE2intropre4.png', 'ph2intro_img': 'img/img_instruction/PHASE2intro_pic.png', 'button': 'img/img_button/4button.png'},
      {'ph2intropre': 'img/img_instruction/PHASE2intropre5.png', 'ph2intro_img': 'img/img_instruction/PHASE2intro_pic.png', 'button': 'img/img_button/4button.png'},
      {'ph2intropre': 'img/img_instruction/PHASE2intropre6.png', 'ph2intro_img': 'img/img_instruction/PHASE2intro_pic.png', 'button': 'img/img_button/4button.png'},
      {'ph2intropre': 'img/img_instruction/PHASE2intropre7.png', 'ph2intro_img': 'img/img_instruction/PHASE2intro_pic.png', 'button': 'img/img_button/3button.jpg'}]
    Routine PHASE2intro
  LoopTerminator trials_9
  Routine PHASE2intro_role
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine ph2match
  LoopTerminator trials_3
  LoopInitiator trials_10 loopType="TrialHandler"
    conditions = [{'student_1': 'img/img_person/student1.png', 'student_2': 'img/img_person/student2.png', 'student_3': 'img/img_person/student3.png', 'student_4': 'img/img_person/student4.png', 'student_5': 'img/img_person/student5.png', 'student_6': 'img/img_person/student6.png', 'student_7': 'img/img_person/student7.png', 'student_8': 'img/img_person/student8.png', 'student_9': 'img/img_person/student9.png', 'student_10': 'img/img_person/student10.png', 'student_11': 'img/img_person/student11.png', 'student_12': 'img/img_person/student12.png', 'student_13': 'img/img_person/student13.png', 'student_14': 'img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
    conditionsFile = cond/ph2v2pre_cond.xlsx
    loopType = random
    nReps = 1
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    Routine ph2v2test_code
    Routine ph2v2testpre
  LoopTerminator trials_10
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = cond/ph2_stimuli_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ph2_stimuli_instr': 'img/img_instruction/ph2stimuli_instr1.png', 'ph2_stimuli': 'img/img_axis/ph2stimuli1.png', 'ph2_stimuli_2': 'img/img_axis/ph2stimuli1(2).png', 'elec_intensity': 10, 'student_1': 'img/img_person/student1.png', 'student_2': 'img/img_person/student2.png', 'student_3': 'img/img_person/student3.png', 'student_4': 'img/img_person/student4.png', 'student_5': 'img/img_person/student5.png', 'student_6': 'img/img_person/student6.png', 'student_7': 'img/img_person/student7.png', 'student_8': 'img/img_person/student8.png', 'student_9': 'img/img_person/student9.png', 'student_10': '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,
      {'ph2_stimuli_instr': 'img/img_instruction/ph2stimuli_instr2.png', 'ph2_stimuli': 'img/img_axis/ph2stimuli2.png', 'ph2_stimuli_2': 'img/img_axis/ph2stimuli2(2).png', 'elec_intensity': 10, 'student_1': 'img/img_person/student1.png', 'student_2': 'img/img_person/student2.png', 'student_3': 'img/img_person/student3.png', 'student_4': 'img/img_person/student4.png', 'student_5': 'img/img_person/student5.png', 'student_6': 'img/img_person/student6.png', 'student_7': 'img/img_person/student7.png', 'student_8': 'img/img_person/student8.png', 'student_9': 'img/img_person/student9.png', 'student_10': 'i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,
      {'ph2_stimuli_instr': 'img/img_instruction/ph2stimuli_instr3.png', 'ph2_stimuli': 'img/img_axis/ph2stimuli3.png', 'ph2_stimuli_2': 'img/img_axis/ph2stimuli3(2).png', 'elec_intensity': 3, 'student_1': 'img/img_person/student1.png', 'student_2': 'img/img_person/student2.png', 'student_3': 'img/img_person/student3.png', 'student_4': 'img/img_person/student4.png', 'student_5': 'img/img_person/student5.png', 'student_6': 'img/img_person/student6.png', 'student_7': 'img/img_person/student7.png', 'student_8': 'img/img_person/student8.png', 'student_9': 'img/img_person/student9.png', 'student_10': 'im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,
      {'ph2_stimuli_instr': 'img/img_instruction/ph2stimuli_instr4.png', 'ph2_stimuli': 'img/img_axis/ph2stimuli4.png', 'ph2_stimuli_2': 'img/img_axis/ph2stimuli4(2).png', 'elec_intensity': 9, 'student_1': 'img/img_person/student1.png', 'student_2': 'img/img_person/student2.png', 'student_3': 'img/img_person/student3.png', 'student_4': 'img/img_person/student4.png', 'student_5': 'img/img_person/student5.png', 'student_6': 'img/img_person/student6.png', 'student_7': 'img/img_person/student7.png', 'student_8': 'img/img_person/student8.png', 'student_9': 'img/img_person/student9.png', 'student_10': 'im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
    Routine time_down_num
    LoopInitiator trials_8 loopType="TrialHandler"
      loopType = random
      nReps = time_dw
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      Routine ph2v2test
    LoopTerminator trials_8
    Routine ph2v2test_1
  LoopTerminator trials_6
  Routine ph2scaleintro
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = cond/ph2scales.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'scales': 'img/img_instruction/ph2scale1.png'},
      {'scales': 'img/img_instruction/ph2scale2.png'},
      {'scales': 'img/img_instruction/ph2scale3.png'},
      {'scales': 'img/img_instruction/ph2scale4.png'},
      {'scales': 'img/img_instruction/ph2scale5.png'},
      {'scales': 'img/img_instruction/ph2scale6.png'},
      {'scales': 'img/img_instruction/ph2scale7.png'}]
    Routine ph2scales
  LoopTerminator trials_4
  Routine PHASE3instr
  LoopInitiator trials_12 loopType="TrialHandler"
    conditionsFile = cond/PHASE3intro_2_cond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ph3intro_2': 'img/img_instruction/PHASE3instr_2_1.png', 'ph3intro_2_personleftimg': 'img/img_person/blank.png', 'ph3intro_2_personrightimg': 'img/img_person/blank.png', 'button_ph3intro_2': 'img/img_button/4button.png', 'text_left': '.', 'text_right': '.'},
      {'ph3intro_2': 'img/img_instruction/PHASE3instr_2_2.png', 'ph3intro_2_personleftimg': 'img/img_person/py21.png', 'ph3intro_2_personrightimg': 'img/img_person/py22.png', 'button_ph3intro_2': 'img/img_button/4button.png', 'text_left': '4周', 'text_right': '7周'},
      {'ph3intro_2': 'img/img_instruction/PHASE3instr_2_3.png', 'ph3intro_2_personleftimg': 'img/img_person/py21.png', 'ph3intro_2_personrightimg': 'img/img_person/py22.png', 'button_ph3intro_2': 'img/img_button/4button.png', 'text_left': '4周', 'text_right': '7周'},
      {'ph3intro_2': 'img/img_instruction/PHASE3instr_2_4.png', 'ph3intro_2_personleftimg': 'img/img_person/py21.png', 'ph3intro_2_personrightimg': 'img/img_person/py22.png', 'button_ph3intro_2': 'img/img_button/4button.png', 'text_left': '4周', 'text_right': '7周'},
      {'ph3intro_2': 'img/img_instruction/PHASE3instr_2_5.png', 'ph3intro_2_personleftimg': 'img/img_person/py21.png', 'ph3intro_2_personrightimg': 'img/img_person/py22.png', 'button_ph3intro_2': 'img/img_button/4button.png', 'text_left': '4周', 'text_right': '7周'}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
    Routine PHASE3instr_2
  LoopTerminator trials_12
  LoopInitiator trials_14 loopType="TrialHandler"
    conditionsFile = cond/PHASE3intro_3_cond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ph3intro_3': 'img/img_instruction/PHASE3instr_3_1.png', 'ph3intro_3_personleftimg': 'img/img_person/py21.png', 'ph3intro_3_personrightimg': 'img/img_person/py22.png', 'button_ph3intro_3': 'img/img_button/4button.png', 'text_left_2': '4周', 'text_right_2': '7周'},
      {'ph3intro_3': 'img/img_instruction/PHASE3instr_3_2.png', 'ph3intro_3_personleftimg': 'img/img_person/py21.png', 'ph3intro_3_personrightimg': 'img/img_person/py22.png', 'button_ph3intro_3': 'img/img_button/4button.png', 'text_left_2': '4周', 'text_right_2': '7周'},
      {'ph3intro_3': 'img/img_instruction/PHASE3instr_3_3.png', 'ph3intro_3_personleftimg': 'img/img_person/py21.png', 'ph3intro_3_personrightimg': 'img/img_person/py22.png', 'button_ph3intro_3': 'img/img_button/4button.png', 'text_left_2': '4周', 'text_right_2': '7周'},
      {'ph3intro_3': 'img/img_instruction/PHASE3instr_3_4.png', 'ph3intro_3_personleftimg': 'img/img_person/py21.png', 'ph3intro_3_personrightimg': 'img/img_person/py22.png', 'button_ph3intro_3': 'img/img_button/4button.png', 'text_left_2': '4周', 'text_right_2': '7周'},
      {'ph3intro_3': 'img/img_instruction/PHASE3instr_3_5.png', 'ph3intro_3_personleftimg': 'img/img_person/py21.png', 'ph3intro_3_personrightimg': 'img/img_person/py22.png', 'button_ph3intro_3': 'img/img_button/4button.png', 'text_left_2': '4周', 'text_right_2': '7周'}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
    Routine PHASE3intr_3
  LoopTerminator trials_14
  Routine ph3_prequestion
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = cond/TD_cond0922.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'pic_loc1': 'img/img_person/py1.png', 'pic_loc2': 'img/img_person/py11.png'},
      {'pic_loc1': 'img/img_person/py1.png', 'pic_loc2': 'img/img_person/py12.png'},
      {'pic_loc1': 'img/img_person/py1.png', 'pic_loc2': 'img/img_person/py13.png'},
      {'pic_loc1': 'img/img_person/py1.png', 'pic_loc2': 'img/img_person/py14.png'},
      {'pic_loc1': 'img/img_person/py1.png', 'pic_loc2': 'img/img_person/py15.png'},
      {'pic_loc1': 'img/img_person/py1.png', 'pic_loc2': 'img/img_person/py16.png'},
      {'pic_loc1': 'img/img_person/py1.png', 'pic_loc2': 'img/img_person/py17.png'},
      {'pic_loc1': 'img/img_person/py1.png', 'pic_loc2': 'img/img_person/py18.png'},
      {'pic_loc1': 'img/img_person/py1.png', 'pic_loc2': 'img/img_person/py19.png'},
      {'pic_loc1': 'img/img_person/py1.png', 'pic_loc2': 'img/img_person/py20.png'},
      {'pic_loc1': 'img/img_person/py2.png', 'pic_loc2': 'img/img_person/py11.png'},
      {'pic_loc1': 'img/img_person/py2.png', 'pic_loc2': 'img/img_person/py12.png'},
      {'pic_loc1': 'img/img_person/py2.png', 'pic_loc2': 'img/img_person/py13.png'},
      {'pic_loc1': 'img/img_person/py2.png', 'pic_loc2': 'img/img_person/py14.png'},
      {'pic_loc1': 'img/img_person/py2.png', 'pic_loc2': 'img/img_person/py15.png'},
      {'pic_loc1': 'img/img_person/py2.png', 'pic_loc2': 'img/img_person/py16.png'},
      {'pic_loc1': 'img/img_person/py2.png', 'pic_loc2': 'img/img_person/py17.png'},
      {'pic_loc1': 'img/img_person/py2.png', 'pic_loc2': 'img/img_person/py18.png'},
      {'pic_loc1': 'img/img_person/py2.png', 'pic_loc2': 'img/img_person/py19.png'}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
    Routine Ph3
  LoopTerminator trials_2
  Routine stop
